# Pulse of strong common noise

# Wiener processes
wiener w

# couple LIF neurons
v1'=-v1+gamma*(v2-v1)+Iext
v2'=-v2+gamma*(v1-v2)+Iext

# external current function
# originally it was set to 0.1 (for sent figures)
Iext = if (spike_nb >= 10 & abs(t-tpulse)<DtPulse) then (I_pulse + s*w) else (I_baseline)

# tracking current
aux I = Iext

# tracking spikes & spike timings
par tspike1=99, tspike2=99
par tm1spike1=99, tm1spike2=99
par tpulse = -99
par spike_nb = 0
aux nb = spike_nb

# tracking phase difference
aux phi = if(tspike1 > tspike2) then (1 - (tspike1-tspike2)/abs(tspike1-tm1spike1)) else (1 - (tspike1-tm1spike2)/abs(tspike1-tm1spike1))

# detection of crossing of the thresholds
# we reset and increment the voltages
global 1 v1-vthr {v1=vreset; v2=v2+gamma*beta; spike_nb=spike_nb+1; tm1spike1=tspike1; tspike1=t}
global 1 v2-vthr {v2=vreset; v1=v1+gamma*beta; tm1spike2=tspike2; tspike2=t}

global 0 v1-vthr {v1=vreset}
global 0 v2-vthr {v2=vreset}

# If we reach the 10th spike, then current I_pulse is injected into both cells for a brief amount of time (note that it only has an effect on cell 2 since it is injected when cell 1 is resetting)
global 0 spike_nb-10 {tpulse = t}

# initial conditions
# init v1=0.7101020514,v2=0 ideal for I=1.2
init v1=0.8208712153, v2=0 

# parameters
par I_baseline=1.4, I_pulse=1.4, DtPulse=0.1, s=0.02, gamma=0.1, beta=0.1, vthr=1, vreset=0

# set up plots
@ bound=100000
@ total=50000
@ xlo=0, xhi=50, ylo=-0.1, yhi=3.1

# time step
@ dt=0.001

done
